<VarianResearchBeam SchemaVersion="1.0">
	<!-- ***********************************************
	
		Developer Mode XML Instructions For Delivery 
		of SNC Multi-Met Plan for an HD TrueBeam.
		
		Delivery instructions for all couch angles 
		and will eventually include imaging capture
		instructions.
		
		Currently in
		 - All couch angle 0 beams
		 
		Need to work on
		 - Clean up of initial 
		 - Capture of xml for delivery at alternate couch angles
		 - Addition of imaging
	
	*************************************************-->
	<SetBeam>
		<!-- -->
		<Id>356843408</Id>
		<TrajectoryUploadInfo><![CDATA[ftp://172.20.20.100/TrajectoryLog\Treatment\TrajectoryLog_02.bin]]></TrajectoryUploadInfo>
		<MLCModel><![CDATA[NDS120HD]]></MLCModel>
		<TolTable>
			<GantryRtn>0.1</GantryRtn>
			<CollRtn>0.1</CollRtn>
			<CouchVrt>0.1</CouchVrt>
			<CouchLat>0.1</CouchLat>
			<CouchLng>0.1</CouchLng>
			<CouchRtn>0.1</CouchRtn>
			<CouchPit>0.1</CouchPit>
			<CouchRol>0.1</CouchRol>
			<Y12>0.2</Y12>
			<X12>0.2</X12>
		</TolTable>
		<VelTable></VelTable>
		<Accs>
			<Acc1>0</Acc1>
			<Acc2>0</Acc2>
			<Acc3>0</Acc3>
			<Acc4>0</Acc4>
		</Accs>
		<ControlPoints>
			<!-- ***********************************
				1st Beam
				Gantry 180, Collimator 0, Couch 0
				*************************************-->
			
			
			<!-- ** Control Point: 0  **-->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>0</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>13</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G180]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Energy>6x</Energy>
				<Mu>0</Mu>
				<DRate>600</DRate>
				<GantryRtn>0</GantryRtn>
				<CollRtn>180</CollRtn>
				<!-- *** Don't Think This is needed
				<CouchVrt>100</CouchVrt>
				<CouchLat>100</CouchLat>
				<CouchLng>100</CouchLng>
				<CouchRtn>180</CouchRtn>
				<CouchPit>0</CouchPit>
				<CouchRol>0</CouchRol>
				-->
				<Y1>8.5</Y1>
				<Y2>4.5</Y2>
				<X1>4.5</X1>
				<X2>4.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>6 6 6 6 6 6 1 1 1 1 -2 -2 -2 -2 1 1 1 1 1 1 1 1 6 6 6 6 1 1 1 1 1 1 1 1 6 6 6 6 1 1 1 1 1 1 1 1 6 6 6 6 6 6 6 6 6 6 6 6 6 6</B>
					<A>-6 -6 -6 -6 -6 -6 1 1 1 1 4 4 4 4 1 1 1 1 1 1 1 1 -6 -6 -6 -6 1 1 1 1 1 1 1 1 -6 -6 -6 -6 1 1 1 1 1 1 1 1 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 1 ** -->
			<Cp> 
				<Mu>10</Mu>
			</Cp>

			<!-- ** Control Point: 2 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 4 4 4 4 4 4 4 4 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 -2 -2 -2 -2 -2 -2 -2 -2 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 3 ** -->
			<Cp> 
				<TreatProgressEvent />
				<SubBeam>
					<Seq>1</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>4</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G180 C90]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>20</Mu>
			</Cp>

			<!-- ***********************************
				
				2nd Beam below. may be Varian coords but
				in IEC
				 Gantry 180, Collimator 90, Couch 0
				
				*************************************-->

			<!-- ** Control Point: 4 ** -->
			<Cp> 
				<TreatProgressEvent />
				<CollRtn>90</CollRtn>
				<Y1>4.5</Y1>
				<X1>8.5</X1>
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 0.018 0.018 0.018 0.018 -6.018 -6.018 -6.018 -6.015 6 6 6 6 6 6 6 6 -6 -6 -6 -6 -2 -2 -2 -2 -2 -2 -2 -2 -6 -6 -6 -6 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 -0.018 -0.018 -0.018 -0.018 6.018 6.018 6.018 6.015 -4 -4 -4 -4 -4 -4 -4 -4 6 6 6 6 4 4 4 4 4 4 4 4 6 6 6 6 2.5 2.5 2.5 2.5 2.5 2.5 2.5 2.5 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 5 ** -->
			<Cp> 
				<Mu>30</Mu>
			</Cp>

			<!-- ** Control Point: 6 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 0.018 0.018 0.018 0.018 -6.018 -6.018 -6.018 -6.015 -6.002 -6.002 -6.002 -6.002 -6.002 -6.002 -6.002 -5.999 -6 -6 -6 -6 1 1 1 1 1 1 1 1 -6 -6 -6 -6 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 -0.018 -0.018 -0.018 -0.018 6.018 6.018 6.018 6.015 6.002 6.002 6.002 6.002 6.002 6.002 6.002 6.025 6 6 6 6 1 1 1 1 1 1 1 1 6 6 6 6 6.024 6.024 6.024 6.024 6.024 6.024 6.024 6.024 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>
			
			<!-- ** Control Point: 7 ** -->
			<Cp> 
				<Mu>40</Mu>
			</Cp>

			<!-- ** Control Point: 8 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 0.018 0.018 0.018 0.018 -6.018 -6.018 -6.018 -6.015 -6.026 -6.026 -6.026 -6.026 -6.026 -6.026 -6.026 -6.023 -6 -6 -6 -6 4 4 4 4 4 4 4 4 -6 -6 -6 -6 -6.025 -6.025 -6.025 -6.025 -6.025 -6.025 -6.025 -6.025 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 -0.018 -0.018 -0.018 -0.018 6.018 6.018 6.018 6.015 6.026 6.026 6.026 6.026 6.026 6.026 6.026 6.026 6 6 6 6 -2 -2 -2 -2 -2 -2 -2 -2 6 6 6 6 6.025 6.025 6.025 6.025 6.025 6.025 6.025 6.025 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 9 ** -->
			<Cp> 
				<Mu>50</Mu>
			</Cp>

			<!-- ** Control Point: 10 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 0.018 0.018 0.018 0.018 -6.018 -6.018 -6.018 -6.015 -6.027 -6.027 -6.027 -6.027 -6.027 -6.027 -6.027 -6.024 -6 -6 -6 -6 8 8 8 8 8 8 8 8 -6 -6 -6 -6 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6.024 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 -0.018 -0.018 -0.018 -0.018 6.018 6.018 6.018 6.015 6.027 6.027 6.027 6.027 6.027 6.027 6.027 6.027 6 6 6 6 -6 -6 -6 -6 -6 -6 -6 -6 6 6 6 6 6.024 6.024 6.024 6.024 6.024 6.024 6.024 6.024 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>
			
			<!-- ** Control Point: 11 ** -->
			<Cp> 
				<TreatProgressEvent />
				<SubBeam>
					<Seq>2</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>5</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G90 C90]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>60</Mu>
			</Cp>

			<!-- ***********************************
				
				3rd Beam below. may be Varian coords but
				in IEC
				 Gantry 90, Collimator 90, Couch 0
				
				*************************************-->


			<!-- ** Control Point: 12 ** -->
			<Cp> 
				<TreatProgressEvent />
				<GantryRtn>90</GantryRtn>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3.037 -3.037 -3.037 -3.037 -3 -3 -5.039 -5.039 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.038 -5.038 -5.038 -5.038 -2 -2 -2 -2 -2 -2 -2 -2 -5.015 -5.015 -5.015 -5.015 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -4.99 -4.99 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3.037 3.037 3.037 3.037 3 3 5.039 5.039 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.038 5.038 5.038 5.038 4 4 4 4 4 4 4 4 5.015 5.015 5.015 5.015 5.01 5.01 5.01 5.01 5.01 5.01 5.01 5.01 4.99 4.992 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 13 ** -->
			<Cp> 
				<Mu>70</Mu>
			</Cp>

			<!-- ** Control Point: 14 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3.037 -3.037 -3.037 -3.037 -3 -3 -5.039 -5.039 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.038 -5.038 -5.038 -5.038 1 1 1 1 1 1 1 1 -5.015 -5.015 -5.015 -5.015 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -4.99 -4.99 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3.037 3.037 3.037 3.037 3 3 5.039 5.039 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.038 5.038 5.038 5.038 1 1 1 1 1 1 1 1 5.015 5.015 5.015 5.015 5.01 5.01 5.01 5.01 5.01 5.01 5.01 5.01 4.99 4.992 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 15 ** -->
			<Cp> 
				<Mu>80</Mu>
			</Cp>

			<!-- ** Control Point: 16 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3.037 -3.037 -3.037 -3.037 -3 -3 -5.039 -5.039 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.038 -5.038 -5.038 -5.038 4 4 4 4 4 4 4 4 -5.015 -5.015 -5.015 -5.015 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -4.99 -4.99 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3.037 3.037 3.037 3.037 3 3 5.039 5.039 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.038 5.038 5.038 5.038 -2 -2 -2 -2 -2 -2 -2 -2 5.015 5.015 5.015 5.015 5.01 5.01 5.01 5.01 5.01 5.01 5.01 5.01 4.99 4.992 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 17 ** -->
			<Cp> 
				<Mu>90</Mu>
			</Cp>

			<!-- ** Control Point: 18 ** -->
			<Cp> 
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3.037 -3.037 -3.037 -3.037 -3 -3 -5.039 -5.039 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.034 -5.038 -5.038 -5.038 -5.038 8 8 8 8 8 8 8 8 -5.015 -5.015 -5.015 -5.015 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -5.01 -4.99 -4.99 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3.037 3.037 3.037 3.037 3 3 5.039 5.039 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.034 5.038 5.038 5.038 5.038 -6 -6 -6 -6 -6 -6 -6 -6 5.015 5.015 5.015 5.015 5.01 5.01 5.01 5.01 5.01 5.01 5.01 5.01 4.99 4.992 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 19 ** -->
			<Cp> 
				<TreatProgressEvent />
				<SubBeam>
					<Seq>3</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>7</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G90 C90 2]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Mu>100</Mu>
			</Cp>

			<!-- ***********************************
				
				4th beam below. may be Varian coords but
				in IEC
				 Gantry 90, Collimator 90, Couch 0 
				 2nd beam at these coordinates
				
				*************************************-->

			<!-- ** Control Point: 20 ** -->
			<Cp> 
				<TreatProgressEvent />
				<X1>6.5</X1>
				<X2>3</X2>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3.493 -3.493 -3.504 -3.504 -3.525 -3.524 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.517 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -3.524 -3.524 -3.524 -3.524 -3.524 -3.524 -3.508 -3.508 -3.508 -3.507 -3.507 -3.507 -3.507 -3.507 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3.493 3.527 3.504 3.504 3.525 3.524 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 2.546 2.546 2.546 2.546 2.546 2.546 2.546 2.546 3.524 3.524 3.524 3.524 3.524 3.524 3.508 3.508 3.508 3.507 3.507 3.507 3.507 3.507 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 21 ** -->
			<Cp> 
				<Mu>110</Mu>
			</Cp>
			
			<!-- ** Control Point: 22 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3.493 -3.493 -3.504 -3.504 -3.525 -3.524 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.517 5.854 5.854 5.854 5.854 5.854 5.854 5.854 5.854 -3.524 -3.524 -3.524 -3.524 -3.524 -3.524 -3.508 -3.508 -3.508 -3.507 -3.507 -3.507 -3.507 -3.507 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3.493 3.527 3.504 3.504 3.525 3.524 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 3.524 3.524 3.524 3.524 3.524 3.524 3.508 3.508 3.508 3.507 3.507 3.507 3.507 3.507 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 23 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>4</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>6</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G90 C270]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>120</Mu>
			</Cp>

			<!-- ***********************************
				
				5th Beam below. may be Varian coords but
				in IEC
				 Gantry 90, Collimator 270, Couch 0
				
				*************************************-->


			<!-- ** Control Point: 24 ** -->
			<Cp>
				<TreatProgressEvent />
				<CollRtn>270</CollRtn>
				<X1>4.5</X1>
				<X2>8.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>3.012 3.012 3.012 3.012 3.012 3.012 2.975 2.975 2.975 2.975 3.012 3.012 5.003 5.003 5.008 5.008 5.008 5.008 5.008 5.008 5.008 5.008 5.004 5.004 5.004 5.004 4 4 4 4 4 4 4 4 4.949 4.949 4.949 4.949 4.954 4.954 4.954 4.954 4.954 4.954 4.954 4.954 4.974 4.974 2.905 2.905 2.905 2.905 2.905 2.905 2.905 2.905 2.905 2.905 2.905 2.905</B>
					<A>-3.012 -3.012 -3.012 -3.012 -3.012 -3.012 -2.975 -2.975 -2.975 -2.975 -3.012 -3.012 -5.003 -5.003 -5.008 -5.008 -5.008 -5.008 -5.008 -5.008 -5.008 -5.008 -5.004 -5.004 -5.004 -5.004 -2 -2 -2 -2 -2 -2 -2 -2 -4.949 -4.949 -4.949 -4.949 -4.954 -4.954 -4.954 -4.954 -4.954 -4.954 -4.954 -4.954 -4.974 -4.972 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905 -2.905</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 25 ** -->
			<Cp>
				<Mu>130</Mu>
			</Cp>

			<!-- ** Control Point: 26 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>3.046 3.046 3.046 3.046 3.046 3.046 3.009 3.009 3.009 3.009 3.046 3.046 4.947 4.947 4.952 4.952 4.952 4.952 4.952 4.952 4.952 4.952 4.948 4.948 4.948 4.948 1 1 1 1 1 1 1 1 5.007 5.007 5.007 5.007 5.012 5.012 5.012 5.012 5.012 5.012 5.012 5.012 5.032 5.032 3.062 3.062 3.062 3.062 3.062 3.062 3.062 3.062 3.062 3.062 3.062 3.062</B>
					<A>-3.046 -3.046 -3.046 -3.046 -3.046 -3.046 -3.009 -3.009 -3.009 -3.009 -3.046 -3.046 -4.947 -4.947 -4.952 -4.952 -4.952 -4.952 -4.952 -4.952 -4.952 -4.952 -4.948 -4.948 -4.948 -4.948 1 1 1 1 1 1 1 1 -5.007 -5.007 -5.007 -5.007 -5.012 -5.012 -5.012 -5.012 -5.012 -5.012 -5.012 -5.012 -5.032 -5.03 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062 -3.062</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 27 ** -->
			<Cp>
				<Mu>140</Mu>
			</Cp>

			<!-- ** Control Point: 28 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>2.954 2.954 2.954 2.954 2.954 2.954 2.917 2.917 2.917 2.917 2.954 2.954 4.982 4.982 4.987 4.987 4.987 4.987 4.987 4.987 4.987 4.987 4.983 4.983 4.983 4.983 -2 -2 -2 -2 -2 -2 -2 -2 5.041 5.041 5.041 5.041 5.046 5.046 5.046 5.046 5.046 5.046 5.046 5.046 5.066 5.066 2.944 2.944 2.944 2.944 2.944 2.944 2.944 2.944 2.944 2.944 2.944 2.944</B>
					<A>-2.954 -2.954 -2.954 -2.954 -2.954 -2.954 -2.917 -2.917 -2.917 -2.917 -2.954 -2.954 -4.982 -4.982 -4.987 -4.987 -4.987 -4.987 -4.987 -4.987 -4.987 -4.987 -4.983 -4.983 -4.983 -4.983 4 4 4 4 4 4 4 4 -5.041 -5.041 -5.041 -5.041 -5.046 -5.046 -5.046 -5.046 -5.046 -5.046 -5.046 -5.046 -5.066 -5.064 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944 -2.944</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 29 ** -->
			<Cp>
				<Mu>150</Mu>
			</Cp>

			<!-- ** Control Point: 30 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>3.016 3.016 3.016 3.016 3.016 3.016 2.979 2.979 2.979 2.979 3.016 3.016 4.95 4.95 4.955 4.955 4.955 4.955 4.955 4.955 4.955 4.955 4.951 4.951 4.951 4.951 -6 -6 -6 -6 -6 -6 -6 -6 4.97 4.97 4.97 4.97 4.975 4.975 4.975 4.975 4.975 4.975 4.975 4.975 4.995 4.995 2.945 2.945 2.945 2.945 2.945 2.945 2.945 2.945 2.945 2.945 2.945 2.945</B>
					<A>-3.016 -3.016 -3.016 -3.016 -3.016 -3.016 -2.979 -2.979 -2.979 -2.979 -3.016 -3.016 -4.95 -4.95 -4.955 -4.955 -4.955 -4.955 -4.955 -4.955 -4.955 -4.955 -4.951 -4.951 -4.951 -4.951 8 8 8 8 8 8 8 8 -4.97 -4.97 -4.97 -4.97 -4.975 -4.975 -4.975 -4.975 -4.975 -4.975 -4.975 -4.975 -4.995 -4.993 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945 -2.945</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 31 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>5</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>8</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G90 C270 2]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Mu>160</Mu>
			</Cp>

			<!-- ***********************************
				
				6th Beam below. may be Varian coords but
				in IEC
				 Gantry 90, Collimator 270, Couch 0 #2
				
				*************************************-->


			<!-- ** Control Point: 32 ** -->
			<Cp>
				<TreatProgressEvent />
				<X1>3</X1>
				<X2>6.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>3.084 3.084 3.084 3.084 3.084 3.084 3.084 3.084 3.059 3.059 3.048 3.048 3.495 3.496 3.525 3.525 3.525 3.525 3.525 3.525 3.525 3.525 3.525 3.525 3.525 3.503 2.546 2.546 2.546 2.546 2.546 2.546 2.546 2.546 3.496 3.496 3.496 3.496 3.496 3.496 3.512 3.512 3.512 3.513 3.513 3.513 3.513 3.475 2.928 2.928 2.928 2.928 2.928 2.928 2.928 2.928 2.928 2.928 2.928 2.928</B>
					<A>-3.084 -3.084 -3.084 -3.084 -3.084 -3.084 -3.084 -3.084 -3.059 -3.025 -3.048 -3.048 -3.495 -3.496 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -3.503 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -0.546 -3.496 -3.496 -3.496 -3.496 -3.496 -3.496 -3.512 -3.512 -3.512 -3.513 -3.513 -3.513 -3.513 -3.475 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928 -2.928</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 33 ** -->
			<Cp>
				<Mu>170</Mu>
			</Cp>
			
			<!-- ** Control Point: 34 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>1.99 1.99 1.99 1.99 1.99 1.99 1.99 1.99 3.519 3.519 3.508 3.508 3.487 3.488 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.517 3.495 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 -3.854 3.451 3.451 3.451 3.451 3.451 3.451 3.467 3.467 3.467 3.468 3.468 3.468 3.468 3.468 2.059 2.059 2.059 2.059 2.059 2.059 2.059 2.059 2.059 2.059 2.059 2.059</B>
					<A>-1.99 -1.99 -1.99 -1.99 -1.99 -1.99 -1.99 -1.99 -3.519 -3.485 -3.508 -3.508 -3.487 -3.488 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 -3.495 5.854 5.854 5.854 5.854 5.854 5.854 5.854 5.854 -3.451 -3.451 -3.451 -3.451 -3.451 -3.451 -3.467 -3.467 -3.467 -3.468 -3.468 -3.468 -3.468 -3.468 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059 -2.059</A>
				</Mlc>
			</Cp>
			
			<!-- ** Control Point: 35 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>6</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>10</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G270 C270]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>180</Mu>
			</Cp>

			<!-- ***********************************
				
				7th Beam below. may be Varian coords but
				in IEC
				 Gantry 270, Collimator 270, Couch 0
				
				*************************************-->

			<!-- ** Control Point: 36 ** -->
			<Cp>
				<TreatProgressEvent />
				<GantryRtn>270</GantryRtn>
				<X1>4.5</X1>
				<X2>8.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>4 4 4 4 4 4 4 4 4 4 4 4 5 5 5 5 5 5 5 5 5 5 5 5 5 5 4 4 4 4 4 4 4 4 5 5 5 5 5 5 5 5 5 5 5 5 5 5 4 4 4 4 4 4 4 4 4 4 4 4</B>
					<A>-4 -4 -4 -4 -4 -4 -4 -4 -4 -4 -4 -4 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -2 -2 -2 -2 -2 -2 -2 -2 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -5 -4 -4 -4 -4 -4 -4 -4 -4 -4 -4 -4 -4</A>
				</Mlc>
			</Cp>
			
			<!-- ** Control Point: 37 ** -->
			<Cp>
				<Mu>190</Mu>
			</Cp>

			<!-- ** Control Point: 38 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>2.945 2.945 2.945 2.945 2.99 2.99 2.953 2.953 2.953 2.953 2.973 2.973 4.998 4.998 4.885 4.885 4.885 4.885 4.885 4.885 4.885 4.885 4.965 4.965 4.965 4.965 1 1 1 1 1 1 1 1 4.998 4.998 4.998 4.998 4.928 4.928 4.928 4.928 4.928 4.928 4.928 4.928 4.996 4.996 2.842 2.842 2.842 2.842 2.842 2.842 2.842 2.842 2.842 2.842 2.842 2.842</B>
					<A>-2.945 -2.945 -2.945 -2.945 -2.99 -2.99 -2.953 -2.953 -2.953 -2.953 -2.973 -2.973 -4.998 -4.998 -4.885 -4.885 -4.885 -4.885 -4.885 -4.885 -4.885 -4.885 -4.965 -4.965 -4.965 -4.965 1 1 1 1 1 1 1 1 -4.998 -4.998 -4.998 -4.998 -4.928 -4.928 -4.928 -4.928 -4.928 -4.928 -4.928 -4.928 -4.996 -4.996 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842 -2.842</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 39 ** -->
			<Cp>
				<Mu>200</Mu>
			</Cp>
			
			<!-- ** Control Point: 40 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>3.09 3.09 3.09 3.09 3.135 3.135 3.098 3.098 3.098 3.098 3.118 3.118 4.964 4.929 4.816 4.816 4.816 4.816 4.816 4.816 4.816 4.816 4.896 4.896 4.896 4.896 -2 -2 -2 -2 -2 -2 -2 -2 4.962 4.962 4.962 4.962 4.892 4.892 4.892 4.892 4.892 4.892 4.892 4.892 4.96 4.96 2.949 2.949 2.949 2.949 2.949 2.949 2.949 2.949 2.949 2.949 2.949 2.949</B>
					<A>-3.09 -3.09 -3.09 -3.09 -3.135 -3.135 -3.098 -3.098 -3.098 -3.098 -3.118 -3.118 -4.929 -4.929 -4.816 -4.816 -4.816 -4.816 -4.816 -4.816 -4.816 -4.816 -4.896 -4.896 -4.896 -4.896 4 4 4 4 4 4 4 4 -4.962 -4.962 -4.962 -4.962 -4.892 -4.892 -4.892 -4.892 -4.892 -4.892 -4.892 -4.892 -4.96 -4.96 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949 -2.949</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 41 ** -->
			<Cp>
				<Mu>210</Mu>
			</Cp>

			<!-- ** Control Point: 42 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>4.365 4.365 4.365 4.365 4.41 4.41 4.373 4.373 4.373 4.373 4.393 4.393 4.907 4.907 4.794 4.794 4.794 4.794 4.794 4.794 4.794 4.794 4.874 4.874 4.874 4.874 -6 -6 -6 -6 -6 -6 -6 -6 4.912 4.912 4.912 4.912 4.842 4.842 4.842 4.842 4.842 4.842 4.842 4.842 4.91 4.91 4.401 4.401 4.401 4.401 4.401 4.401 4.401 4.401 4.401 4.401 4.401 4.401</B>
					<A>-4.365 -4.365 -4.365 -4.365 -4.41 -4.41 -4.373 -4.373 -4.373 -4.373 -4.393 -4.393 -4.907 -4.907 -4.794 -4.794 -4.794 -4.794 -4.794 -4.794 -4.794 -4.794 -4.874 -4.874 -4.874 -4.874 8 8 8 8 8 8 8 8 -4.912 -4.912 -4.912 -4.912 -4.842 -4.842 -4.842 -4.842 -4.842 -4.842 -4.842 -4.842 -4.91 -4.91 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401 -4.401</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 43 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>7</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>12</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G270 C270 2]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Mu>220</Mu>
			</Cp>

			<!-- ***********************************
				
				8th Beam below. may be Varian coords but
				in IEC
				 Gantry 270, Collimator 270, Couch 0 #2
				
				*************************************-->

			<!-- ** Control Point: 44 ** -->
			<Cp>
				<TreatProgressEvent />
				<X1>3</X1>
				<X2>6.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>2.07 2.07 2.07 2.07 2.07 2.07 2.07 2.07 2.047 2.08 2.082 2.082 3.307 3.307 3.308 3.308 3.308 3.308 3.308 3.308 3.308 3.308 3.308 3.308 3.308 3.308 2.456 2.456 2.456 2.456 2.456 2.456 2.456 2.456 3.372 3.372 3.372 3.372 3.372 3.372 3.384 3.384 3.384 3.381 3.381 3.381 3.381 3.381 1.953 1.953 1.953 1.953 1.953 1.953 1.953 1.953 1.953 1.953 1.953 1.953</B>
					<A>-2.07 -2.07 -2.07 -2.07 -2.07 -2.07 -2.07 -2.07 -2.046 -2.046 -2.082 -2.082 -3.307 -3.307 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -3.308 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -3.372 -3.372 -3.372 -3.372 -3.372 -3.372 -3.384 -3.384 -3.384 -3.381 -3.381 -3.381 -3.381 -3.381 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953 -1.953</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 45 ** -->
			<Cp>
				<Mu>230</Mu>
			</Cp>

			<!-- ** Control Point: 46 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>2.853 2.853 2.853 2.853 2.853 2.853 2.853 2.853 2.83 2.863 2.865 2.865 3.456 3.496 3.497 3.497 3.497 3.497 3.497 3.497 3.497 3.497 3.497 3.497 3.497 3.497 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 3.435 3.435 3.435 3.435 3.435 3.435 3.447 3.447 3.447 3.444 3.444 3.444 3.444 3.444 2.971 2.971 2.971 2.971 2.971 2.971 2.971 2.971 2.971 2.971 2.971 2.971</B>
					<A>-2.853 -2.853 -2.853 -2.853 -2.853 -2.853 -2.853 -2.853 -2.829 -2.829 -2.865 -2.865 -3.456 -3.496 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 -3.457 6.155 6.155 6.155 6.155 6.155 6.155 6.155 6.155 -3.435 -3.435 -3.435 -3.435 -3.435 -3.435 -3.447 -3.447 -3.447 -3.444 -3.444 -3.444 -3.444 -3.444 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971 -2.971</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 47 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>8</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>9</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G270 C90]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>240</Mu>
			</Cp>

			<!-- ***********************************
				
				9th Beam
				
				Gantry 270, Collimator 90, Couch 0
				
				*************************************-->

			<!-- ** Control Point: 48 ** -->
			<Cp>
				<TreatProgressEvent />
				<CollRtn>90</CollRtn>
				<X1>8.5</X1>
				<X2>4.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -2.955 -2.955 -2.992 -2.992 -2.992 -2.992 -2.972 -2.972 -4.92 -4.92 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -4.953 -4.953 -4.953 -4.953 -2 -2 -2 -2 -2 -2 -2 -2 -4.918 -4.918 -4.918 -4.918 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.92 -4.92 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 2.955 2.955 2.992 2.992 2.992 2.992 2.972 2.972 4.92 4.92 5.033 5.033 5.033 5.033 5.033 5.033 5.033 5.033 4.953 4.953 4.953 4.953 4 4 4 4 4 4 4 4 4.918 4.918 4.918 4.918 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.92 4.92 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 49 ** -->
			<Cp>
				<Mu>250</Mu>
			</Cp>

			<!-- ** Control Point: 50 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -2.955 -2.955 -2.992 -2.992 -2.992 -2.992 -2.972 -2.972 -4.92 -4.92 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -4.953 -4.953 -4.953 -4.953 1 1 1 1 1 1 1 1 -4.918 -4.918 -4.918 -4.918 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.92 -4.92 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 2.955 2.955 2.992 2.992 2.992 2.992 2.972 2.972 4.92 4.92 5.033 5.033 5.033 5.033 5.033 5.033 5.033 5.033 4.953 4.953 4.953 4.953 1 1 1 1 1 1 1 1 4.918 4.918 4.918 4.918 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.92 4.92 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 51 ** -->
			<Cp>
				<Mu>260</Mu>
			</Cp>

			<!-- ** Control Point: 52 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -2.955 -2.955 -2.992 -2.992 -2.992 -2.992 -2.972 -2.972 -4.92 -4.92 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -4.953 -4.953 -4.953 -4.953 4 4 4 4 4 4 4 3.989 -4.918 -4.918 -4.918 -4.918 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.92 -4.92 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 2.955 2.955 2.992 2.992 2.992 2.992 2.972 2.972 4.92 4.92 5.033 5.033 5.033 5.033 5.033 5.033 5.033 5.033 4.953 4.953 4.953 4.953 -2 -2 -2 -2 -2 -2 -2 -1.99 4.918 4.918 4.918 4.918 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.92 4.92 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 53 ** -->
			<Cp>
				<Mu>270</Mu>
			</Cp>

			<!-- ** Control Point: 54 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -2.955 -2.955 -2.992 -2.992 -2.992 -2.992 -2.972 -2.972 -4.92 -4.92 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -5.033 -4.953 -4.953 -4.953 -4.953 8 8 8 8 8 8 8 8 -4.918 -4.918 -4.918 -4.918 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.988 -4.92 -4.92 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 2.955 2.955 2.992 2.992 2.992 2.992 2.972 2.972 4.92 4.92 5.033 5.033 5.033 5.033 5.033 5.033 5.033 5.033 4.953 4.953 4.953 4.953 -6 -6 -6 -6 -6 -6 -6 -6 4.918 4.918 4.918 4.918 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.988 4.92 4.92 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 55 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>9</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>11</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G270 C90 2]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Mu>280</Mu>
			</Cp>

			<!-- ***********************************
				
				10th Beam below
				
				Gantry 270, Collimator 90, Couch 0 #2
				
				*************************************-->

			<!-- ** Control Point: 56 ** -->
			<Cp>
				<TreatProgressEvent />
				<X1>6.5</X1>
				<X2>3</X2>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3.023 -2.99 -2.988 -2.988 -3.479 -3.479 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -0.456 -3.531 -3.531 -3.531 -3.531 -3.531 -3.531 -3.519 -3.519 -3.519 -3.522 -3.522 -3.522 -3.522 -3.522 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3.024 3.024 2.988 2.988 3.479 3.528 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 2.456 2.456 2.456 2.456 2.456 2.456 2.456 2.456 3.531 3.531 3.531 3.531 3.531 3.531 3.519 3.519 3.519 3.522 3.522 3.522 3.522 3.522 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 57 ** -->
			<Cp>
				<Mu>290</Mu>
			</Cp>

			<!-- ** Control Point: 58 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3.023 -2.99 -2.988 -2.988 -3.479 -3.479 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 -3.478 6.155 6.155 6.155 6.155 6.155 6.155 6.155 6.155 -3.531 -3.531 -3.531 -3.531 -3.531 -3.531 -3.519 -3.519 -3.519 -3.522 -3.522 -3.522 -3.522 -3.522 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3.024 3.024 2.988 2.988 3.479 3.528 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 3.478 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 -4.155 3.531 3.531 3.531 3.531 3.531 3.531 3.519 3.519 3.519 3.522 3.522 3.522 3.522 3.522 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 59 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>10</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>17</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G0 C90]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>300</Mu>
			</Cp>

			<!-- ***********************************
				
				11th Beam below
				
				Gantry 0, Collimator 90, Couch 0
				
				*************************************-->
			
			<!-- ** Control Point: 60 ** -->
			<Cp>
				<TreatProgressEvent />
				<GantryRtn>180</GantryRtn>
				<X1>8.5</X1>
				<X2>4.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>8 8 8 8 8 8 8 8 8 8 8 8 8.778 8.778 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 8.912 8.912 8.912 8.912 -2 -2 -2 -2 -2 -2 -2 -2 8.912 8.912 8.912 8.912 6 6 6 6 6 6 6 6 8.98 8.98 8 8 8 8 8 8 8 8 8 8 8 8</B>
					<A>-8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8.778 -8.778 2.5 2.5 2.5 2.5 2.5 2.5 2.5 2.5 -8.912 -8.912 -8.912 -8.912 4 4 4 4 4 4 4 4 -8.912 -8.912 -8.912 -8.912 -4 -4 -4 -4 -4 -4 -4 -4 -8.98 -8.98 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 61 ** -->
			<Cp>
				<Mu>310</Mu>
			</Cp>

			<!-- ** Control Point: 62 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 8.943 1 1 1 1 1 1 1 1 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 8.948 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3 3 3 3 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 -8.943 1 1 1 1 1 1 1 1 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 -8.948 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 63 ** -->
			<Cp>
				<Mu>320</Mu>
			</Cp>

			<!-- ** Control Point: 64 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 -0.016 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 8.969 4 4 4 4 4 4 4 4 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 8.901 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035 -2.035</B>
					<A>0.035 0.035 0.035 0.035 0.035 0.035 0.035 0.035 0.035 0.035 0.035 0.035 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -8.969 -2 -2 -2 -2 -2 -2 -2 -2 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 -8.901 2.035 2.035 2.035 2.035 2.035 2.035 2.035 2.035 2.035 2.035 2.035 2.035</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 65 ** -->
			<Cp>
				<Mu>330</Mu>
			</Cp>

			<!-- ** Control Point: 66 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 8 8 8 8 8 8 8 8 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10</B>
					<A>-10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -6 -6 -6 -6 -6 -6 -6 -6 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 67 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>11</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>14</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G0]]></Name>
					<MaxRadTime>7.9999999999998</MaxRadTime>
				</SubBeam>
				<Mu>340</Mu>
			</Cp>

			<!-- ***********************************
				
				12th Beam below
				
				Gantry 0, Collimator 0, Couch 0
				
				*************************************-->
			
			<!-- ** Control Point: 68 ** -->
			<Cp>
				<TreatProgressEvent />
				<CollRtn>180</CollRtn>
				<Y1>8.5</Y1>
				<X1>4.5</X1>
				<Mlc>
					<ID>1</ID>
					<B>6 6 6 6 6 6 1 1 1 1 4 4 4 4 1 1 1 1 1 1 1 1 6 6 6 6 1 1 1 1 1 1 1 1 6 6 6 6 1 1 1 1 1 1 1 1 6 6 6 6 6 6 6 6 6 6 6 6 6 6</B>
					<A>-6 -6 -6 -6 -6 -6 1 1 1 1 -2 -2 -2 -2 1 1 1 1 1 1 1 1 -6 -6 -6 -6 1 1 1 1 1 1 1 1 -6 -6 -6 -6 1 1 1 1 1 1 1 1 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 69 ** -->
			<Cp>
				<Mu>350</Mu>
			</Cp>

			<!-- ** Control Point: 70 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -2 -2 -2 -2 -2 -2 -2 -2 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 4 4 4 4 4 4 4 4 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 71 ** -->
			<Cp>
				<TreatProgressEvent />
				<SubBeam>
					<Seq>12</Seq>
					<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.748535359813.2066854.20230426171354</PlanInstanceUID><BeamNumber>18</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
					<Name><![CDATA[G0 C270]]></Name>
					<MaxRadTime>16.0000000000002</MaxRadTime>
				</SubBeam>
				<Mu>360</Mu>
			</Cp>

			<!-- ***********************************
				
				13th Beam below
				
				Gantry 0, Collimator 270, Couch 0
				
				*************************************-->

			<!-- ** Control Point: 72 ** -->
			<Cp>
				<TreatProgressEvent />
				<CollRtn>270</CollRtn>
				<Y1>4.5</Y1>
				<X2>8.5</X2>
				<Mlc>
					<ID>1</ID>
					<B>-8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8.743 -8.743 -4 -4 -4 -4 -4 -4 -4 -4 -8.845 -8.845 -8.845 -8.845 4 4 4 4 4 4 4 4 -8.811 -8.811 -8.811 -8.811 2.5 2.5 2.5 2.5 2.5 2.5 2.5 2.5 -8.913 -8.811 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8 -8</B>
					<A>8 8 8 8 8 8 8 8 8 8 8 8 8.743 8.743 6 6 6 6 6 6 6 6 8.845 8.845 8.845 8.845 -2 -2 -2 -2 -2 -2 -2 -2 8.811 8.811 8.811 8.811 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 -0.5 8.913 8.811 8 8 8 8 8 8 8 8 8 8 8 8</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 73 ** -->
			<Cp>
				<Mu>370</Mu>
			</Cp>

			<!-- ** Control Point: 74 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 1 1 1 1 1 1 1 1 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -8.889 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
					<A>3 3 3 3 3 3 3 3 3 3 3 3 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 1 1 1 1 1 1 1 1 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 8.889 3 3 3 3 3 3 3 3 3 3 3 3</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 75 ** -->
			<Cp>
				<Mu>380</Mu>
			</Cp>

			<!-- ** Control Point: 76 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -8.933 -2 -2 -2 -2 -2 -2 -2 -2 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -8.931 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
					<A>6 6 6 6 6 6 6 6 6 6 6 6 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 8.933 4 4 4 4 4 4 4 4 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 8.931 6 6 6 6 6 6 6 6 6 6 6 6</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 77 ** -->
			<Cp>
				<Mu>390</Mu>
			</Cp>

			<!-- ** Control Point: 78 ** -->
			<Cp>
				<Mlc>
					<ID>1</ID>
					<B>-10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -6 -6 -6 -6 -6 -6 -6 -6 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10 -10</B>
					<A>10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 8 8 8 8 8 8 8 8 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10 10</A>
				</Mlc>
			</Cp>

			<!-- ** Control Point: 79 ** -->
			<Cp>
				<TreatProgressEvent />
				<Mu>400</Mu>
			</Cp>
		</ControlPoints>

		<!-- Start of table kicks -->
		
		
		<ImagingParameters>
			<DuringTreatment />
			<ImagingPoints>
				<ImagingPoint>
					<Cp>0</Cp>
					<Mvd>
						<SpecialPosition>mid</SpecialPosition>
					</Mvd>
					<Kvd>
						<SpecialPosition>mid</SpecialPosition>
					</Kvd>
					<Kvs>
						<SpecialPosition>mid</SpecialPosition>
					</Kvs>
				</ImagingPoint>
			</ImagingPoints>
			<ImagingTolerances />
		</ImagingParameters>
		<CouchToleranceOverride>false</CouchToleranceOverride>
	</SetBeam>
</VarianResearchBeam>