<VarianResearchBeam SchemaVersion="1.0">
<SetBeam>
	<Id>1110006648</Id>
	<TrajectoryUploadInfo><![CDATA[ftp://172.20.20.100/TrajectoryLog\Daily QA\TrajectoryLog_01.bin]]></TrajectoryUploadInfo>
	<MLCModel><![CDATA[NDS120HD]]></MLCModel>
	<TolTable>
		<GantryRtn>0.5</GantryRtn>
		<CollRtn>0.5</CollRtn>
		<CouchVrt>3</CouchVrt>
		<CouchLat>10</CouchLat>
		<CouchLng>20</CouchLng>
		<CouchRtn>1</CouchRtn>
		<CouchPit>0</CouchPit>
		<CouchRol>0</CouchRol>
		<Y12>0.1</Y12>
		<X12>0.1</X12>
	</TolTable>
	<VelTable></VelTable>
	<Accs>
		<Acc1>0</Acc1>
		<Acc2>0</Acc2>
		<Acc3>0</Acc3>
		<Acc4>0</Acc4>
	</Accs>
	<ControlPoints>
		<Cp>
			<TreatProgressEvent />
			<SubBeam>
				<Seq>0</Seq>
				<SubbeamGUID><![CDATA[<BeamIdentifier><PlanInstanceUID>1.2.246.352.71.5.1560782106.215696.20101028115736</PlanInstanceUID><BeamNumber>0</BeamNumber></BeamIdentifier>]]></SubbeamGUID>
				<Name><![CDATA[T1.1+AF8-PF+AF8-RA]]></Name>
				<MaxRadTime>300</MaxRadTime>
			</SubBeam>
			<Energy>6x</Energy>
			<Mu>0</Mu>
			<DRate>600</DRate>
			<GantryRtn>1</GantryRtn>
			<CollRtn>180</CollRtn>
			<CouchVrt>100</CouchVrt>
			<CouchLat>100</CouchLat>
			<CouchLng>21.57</CouchLng>
			<CouchRtn>180</CouchRtn>
			<CouchPit>0</CouchPit>
			<CouchRol>0</CouchRol>
			<Y1>10</Y1>
			<Y2>10</Y2>
			<X1>10</X1>
			<X2>10</X2>
			<Mlc>
				<ID>1</ID>
				<B>7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5 7.5</B>
				<A>-7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4 -7.4</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>9.02</Mu>
			<GantryRtn>7.6</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6 6</B>
				<A>-5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9 -5.9</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>48</Mu>
			<GantryRtn>36.2</GantryRtn>
		</Cp>
		<Cp>
			<Mu>56.98</Mu>
			<GantryRtn>42.8</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5 4.5</B>
				<A>-4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4 -4.4</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>96</Mu>
			<GantryRtn>71.4</GantryRtn>
		</Cp>
		<Cp>
			<Mu>105.02</Mu>
			<GantryRtn>78</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3 3</B>
				<A>-2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9 -2.9</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>144</Mu>
			<GantryRtn>106.6</GantryRtn>
		</Cp>
		<Cp>
			<Mu>152.98</Mu>
			<GantryRtn>113.2</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5 1.5</B>
				<A>-1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4 -1.4</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>192</Mu>
			<GantryRtn>141.8</GantryRtn>
		</Cp>
		<Cp>
			<Mu>200.98</Mu>
			<GantryRtn>148.4</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1 0.1</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>240</Mu>
			<GantryRtn>177</GantryRtn>
		</Cp>
		<Cp>
			<Mu>249.02</Mu>
			<GantryRtn>183.6</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>-1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5 -1.5</B>
				<A>1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6 1.6</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>288</Mu>
			<GantryRtn>212.2</GantryRtn>
		</Cp>
		<Cp>
			<Mu>296.98</Mu>
			<GantryRtn>218.8</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>-3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3 -3</B>
				<A>3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1 3.1</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>336</Mu>
			<GantryRtn>247.4</GantryRtn>
		</Cp>
		<Cp>
			<Mu>345.02</Mu>
			<GantryRtn>254</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>-4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5 -4.5</B>
				<A>4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6 4.6</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>384</Mu>
			<GantryRtn>282.6</GantryRtn>
		</Cp>
		<Cp>
			<Mu>393.02</Mu>
			<GantryRtn>289.2</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>-6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6 -6</B>
				<A>6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1 6.1</A>
			</Mlc>
		</Cp>
		<Cp>
			<Mu>432</Mu>
			<GantryRtn>317.8</GantryRtn>
		</Cp>
		<Cp>
			<Mu>440.98</Mu>
			<GantryRtn>324.4</GantryRtn>
			<Mlc>
				<ID>1</ID>
				<B>-7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5 -7.5</B>
				<A>7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6 7.6</A>
			</Mlc>
		</Cp>
		<Cp>
			<TreatProgressEvent />
			<Mu>480</Mu>
			<GantryRtn>353</GantryRtn>
		</Cp>
	</ControlPoints>
	<ImagingParameters>
		<DuringTreatment />
		<ImagingPoints>
			<ImagingPoint>
				<Cp>0</Cp>
				<AcquisitionStart>
					<AcquisitionId>840330593</AcquisitionId>
					<AcquisitionSpecs>
						<Handshake>true</Handshake>
						<MVDose>0</MVDose>
					</AcquisitionSpecs>
				</AcquisitionStart>
				<Mvd>
					<Positions>
						<Lat>0</Lat>
						<Lng>0</Lng>
						<Vrt>-50</Vrt>
						<Pitch>0</Pitch>
					</Positions>
				</Mvd>
				<Kvd>
					<SpecialPosition>retracted</SpecialPosition>
				</Kvd>
				<Kvs>
					<SpecialPosition>retracted</SpecialPosition>
				</Kvs>
			</ImagingPoint>
			<ImagingPoint>
				<Cp>20</Cp>
				<AcquisitionStop>
					<AcquisitionId>840330593</AcquisitionId>
					<AcquisitionSpecs />
				</AcquisitionStop>
			</ImagingPoint>
		</ImagingPoints>
		<ImagingTolerances />
	</ImagingParameters>
	<CouchToleranceOverride>false</CouchToleranceOverride>
</SetBeam>
</VarianResearchBeam>